PsychoPy2experiment version="2022.1.2"
Settings
  Data filename = u'demo_data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1280, 800]
  expName = demo_left
  keyboardBackend = PsychToolbox
  logging level = debug
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Routines
  Routine trial
    ImageComponent image_target
      image [set every repeat] = $target_path
      opacity [set every repeat] = 1
      pos = (0, VERTICAL_OFFSET)
      size = (IMAGE_SIZE, IMAGE_SIZE)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
      texture resolution = 512
      units = deg
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    ImageComponent image_context_left
      image [set every repeat] = $left_path
      opacity [set every repeat] = 1
      pos = (-HORIZONTAL_OFFSET, -VERTICAL_OFFSET)
      size = (IMAGE_SIZE, IMAGE_SIZE)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
      texture resolution = 512
      units = deg
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    ImageComponent image_context_right
      image [set every repeat] = $right_path
      opacity [set every repeat] = 1
      pos = (HORIZONTAL_OFFSET, -VERTICAL_OFFSET)
      size = (IMAGE_SIZE, IMAGE_SIZE)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
      texture resolution = 512
      units = deg
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    KeyboardComponent key_resp
      allowedKeys = '3','1', 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
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    CodeComponent code_trial
      Code Type = Py
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      Before Experiment:
        # this is needed for creating demo sample data
        from collections import OrderedDict
      Begin Experiment:
        demo_data = [OrderedDict([('target_path', 'stimuli_left/left_practice_stimuli/A1_target.png'),
                      ('left_path', 'stimuli_left/left_practice_stimuli/A1_context_notarget.png'),
                      ('right_path', 'stimuli_left/left_practice_stimuli/A1_context_wtarget.png')]),
         OrderedDict([('target_path', 'stimuli_left/left_practice_stimuli/B1_target.png'),
                      ('left_path', 'stimuli_left/left_practice_stimuli/B1_context_wtarget.png'),
                      ('right_path',
                       'stimuli_left/left_practice_stimuli/B1_context_notarget.png')]),
         OrderedDict([('target_path', 'stimuli_left/left_practice_stimuli/C1_target.png'),
                      ('left_path', 'stimuli_left/left_practice_stimuli/C1_context_wtarget.png'),
                      ('right_path',
                       'stimuli_left/left_practice_stimuli/C1_context_notarget.png')]),
         OrderedDict([('target_path', 'stimuli_left/left_practice_stimuli/D1_target.png'),
                      ('left_path', 'stimuli_left/left_practice_stimuli/D1_context_notarget.png'),
                      ('right_path', 'stimuli_left/left_practice_stimuli/D1_context_wtarget.png')])]

        trial_counter = 0

        # set initial values for image paths
        target_path = demo_data[trial_counter]['target_path']
        left_path = demo_data[trial_counter]['left_path']
        right_path = demo_data[trial_counter]['right_path']
      End Routine:
        trial_counter += 1
        # update image paths if this wasn't the last trial
        if trial_counter < len(demo_data):
            target_path = demo_data[trial_counter]['target_path']
            left_path = demo_data[trial_counter]['left_path']
            right_path = demo_data[trial_counter]['right_path']
  Routine instructions
    KeyboardComponent key_resp_instructions
      allowedKeys = 'left', '3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_setup
      Code Type = Auto->JS
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      Before Experiment:
        ###SET EXPERIMENT CONSTANTS###
        # trial image width/height size (in deg)
        IMAGE_SIZE = 7

        # vertical offset of trial images from central horizontal line
        # (in deg)
        VERTICAL_OFFSET = 3.75
        # horizontal offset of (context) trial images from central
        # vertical line (in deg)
        HORIZONTAL_OFFSET = 5

        # medium text size
        MID_TXTSIZE = 0.6

        ###END SET EXPERIMENT CONSTANTS###
    TextComponent text_instructions
      letterHeight = MID_TXTSIZE
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 27
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      text:
        I det här testet ska du hitta former gömda i rutor med linjer.

        Du ska hitta formen som visas på toppen av skärmen i samma storlek och orientering i en av två nedre rutor.

        Lägg höger pekfinger på knappdosans vänstra knapp och långfingret på högra knappen och lämna dem där. När du upptäcker formen i vänstra rutan trycker du på vänstra knappen, om du ser den i högra rutan trycker du på högra knappen.  Nu under demonstrationen, innan du trycker så säg till testledaren vad du tror är rätt svar.

        I det ‘riktiga’ testet har du 20 sekunder på dig att hitta formen. Om du svarar innan två sekunder gått så stannar bilden kvar en kort stund och en liten kvadrat visas längst ner på skärmen innan nästa bild kommer upp. Svara så fort du kan utan att det blir fel, d.v.s. klicka så fort du ser formen, även om två sekunder inte har gått än.

        Tryck vänster knapp för att starta.
  Routine end_screen
    TextComponent text_end
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Nu är demonstrationen klar.
      units = deg
      wrapWidth = 27
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = len(demo_data)
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    Routine trial
  LoopTerminator trials
  Routine end_screen
