PsychoPy2experiment version="2022.1.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = deg
  Window size (pixels) = [1680, 1050]
  expName = LeuvenEFT
  keyboardBackend = PsychToolbox
  logging level = debug
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Routines
  Routine trial
    CodeComponent code_trial
      Code Type = Py
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      Begin Experiment:
        from random import choice, sample, shuffle
        import pandas as pd

        ### IMPORT DATA FROM CSV FILE AND REMOVE IT ###
        TRIAL_ORDER_DIR_NAME = 'trial_orders'
        trial_order_filenames = [x for x in os.listdir(TRIAL_ORDER_DIR_NAME) if not x.startswith('.')]
        assert len(trial_order_filenames) > 0, "There are no trial order files left, you need to generate more."
        trial_order_filename = trial_order_filenames[0]
        fpath = os.path.join(TRIAL_ORDER_DIR_NAME, trial_order_filename)

        df = pd.read_csv(fpath)
        nrows = len(df)
        block_order = []
        row_no = 0
        while row_no < nrows:
            block_type = df['block_type'][row_no]
            block_order.append(block_type)
            if block_type == 'test':
                row_no += 4
            elif block_type == 'control':
                row_no += 8
            else:
                row_no += 1

        target_paths = tuple(df['target_path'])
        left_paths = tuple(df['left_path'])
        right_paths = tuple(df['right_path'])
        correct_keys = tuple(LEFT_KEY if x=='True' else RIGHT_KEY for x in df['left_correct'])

        # remove the trial order file to make sure it isn't used again
        os.remove(fpath)

        ### END IMPORT DATA ###

        ### BEGIN FORM IMAGE COMPONENTS ###
        def leftimg_factory(name, image, spec_pos):
            """
            Generates ImageStim instances for
            L-EFT trial images (this is to avoid repeating code
            for building the stimuli components).
            :name: Name (used internally by PsychoPy) of the stimulus.
            :image: File path to the image that is to be used.
            :spec_pos: Two-element tuple, specifying the position
            (in degrees) at which the image should be displayed.
            """
            out_image = visual.ImageStim(
                win=win,
                name=name, units='deg',
                image=image, mask=None,
                ori=0, pos=spec_pos,
                size=(IMAGE_SIZE, IMAGE_SIZE),
                color=[1,1,1], colorSpace='rgb', opacity=1.0,
                flipHoriz=False, flipVert=False,
                texRes=512, interpolate=True, depth=-2.0
            )
            return out_image

        # form a list of tuples, where each tuple holds the
        # position specification for a type of image, and a
        # list of all file paths to the type/category's images
        size_type_ls = [
            ((0, VERTICAL_OFFSET), target_paths),
            ((-HORIZONTAL_OFFSET, -VERTICAL_OFFSET), left_paths),
            ((HORIZONTAL_OFFSET, -VERTICAL_OFFSET), right_paths)
        ]
        # preload images, by creating an image component for each
        # image and putting it in a dictionary, where the keys of
        # the dictionary are strings of image paths
        images_dict = {}
        for tup in size_type_ls:
            pos = tup[0]
            img_paths = tup[1]
            for img_path in img_paths:
                # skip if it's a baseline trial
                if img_path == 'baseline':
                    continue
                new_img = leftimg_factory(
                    name=img_path,
                    image=img_path,
                    spec_pos=pos
                )
                images_dict[img_path] = new_img

        ### END FORM IMAGE COMPONENTS ###


        # initialize trial order counter
        trial_counter = 0



        # set constants
        MIN_TRIAL_DURATION = 2
        # fetch and set total number of blocks
        N_BLOCKS = len(block_order)

        # form a dictionary that holds necessary information
        # for each block type
        block_dict = {
            'test': {
                    'instruction': "DOLD\n\nhitta den dolda formen",
                    'inloop_trial_no': 4,
                    'response_keys': [LEFT_KEY, RIGHT_KEY],
                },
            'control': {
                    'instruction': "MARKERAD\n\nhitta den markerade formen",
                    'inloop_trial_no': 8,
                    'response_keys': [LEFT_KEY, RIGHT_KEY],
                },
            'baseline': {
                    'instruction': "KORS\n\ntitta på korset",
                    'inloop_trial_no': 1,
                    'response_keys': [],
                },
        }


        # initialize the string variable which holds block instruction
        # text
        first_block_type = block_order[0]
        block_instr_str = block_dict[first_block_type]['instruction']

        # create keyboard instance
        key_resp_trial = keyboard.Keyboard()
      Begin Routine:
        if block_type == 'baseline':
            cross_opacity = 1
            image_opacity = 0
            correct_key = ''
        else:
            cross_opacity = 0
            image_opacity = 1
            correct_key = correct_keys[trial_counter]
            left_path = left_paths[trial_counter]
            right_path = right_paths[trial_counter]
            target_path = target_paths[trial_counter]
            image_context_left = images_dict[left_path]
            image_context_right = images_dict[right_path]
            image_target = images_dict[target_path]

        # reset variables related
        # to participant response
        click_indicator_visible = False
        has_pressed = False
        theseKeys = []
        polygon_trial_clicked.opacity = 0
        key_resp_trial.keys = []
        key_resp_trial.rt = []
        key_resp_trial.status = NOT_STARTED
        _key_resp_trial_allKeys = []
      Each Frame:
        # *key_resp_trial* updates
        waitOnFlip = False
        if key_resp_trial.status == NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
            # keep track of start time/frame for later
            key_resp_trial.frameNStart = frameN  # exact frame index
            key_resp_trial.tStart = t  # local t and not account for scr refresh
            key_resp_trial.tStartRefresh = tThisFlipGlobal  # on global time
            win.timeOnFlip(key_resp_trial, 'tStartRefresh')  # time at next scr refresh
            key_resp_trial.status = STARTED
            # AllowedKeys looks like a variable named `inloop_keys`
            if not type(inloop_keys) in [list, tuple, np.ndarray]:
                if not isinstance(inloop_keys, str):
                    logging.error('AllowedKeys variable `inloop_keys` is not string- or list-like.')
                    core.quit()
                elif not ',' in inloop_keys:
                    inloop_keys = (inloop_keys,)
                else:
                    inloop_keys = eval(inloop_keys)
            # keyboard checking is just starting
            waitOnFlip = True
            win.callOnFlip(key_resp_trial.clock.reset)  # t=0 on next screen flip
            win.callOnFlip(key_resp_trial.clearEvents, eventType='keyboard')  # clear events on next screen flip
        if key_resp_trial.status == STARTED:
            # is it time to stop? (based on global clock, using actual start)
            if tThisFlipGlobal > key_resp_trial.tStartRefresh + 20-frameTolerance:
                # keep track of stop time/frame for later
                key_resp_trial.tStop = t  # not accounting for scr refresh
                key_resp_trial.frameNStop = frameN  # exact frame index
                win.timeOnFlip(key_resp_trial, 'tStopRefresh')  # time at next scr refresh
                key_resp_trial.status = FINISHED
        if key_resp_trial.status == STARTED and not waitOnFlip:
            theseKeys = key_resp_trial.getKeys(keyList=list(inloop_keys), waitRelease=False)
            _key_resp_trial_allKeys.extend(theseKeys)
            if len(_key_resp_trial_allKeys):
                key_resp_trial.keys = _key_resp_trial_allKeys[-1].name  # just the last key pressed
                key_resp_trial.rt = _key_resp_trial_allKeys[-1].rt
                # was this correct?
                if (key_resp_trial.keys == str(correct_key)) or (key_resp_trial.keys == correct_key):
                    key_resp_trial.corr = 1
                else:
                    key_resp_trial.corr = 0

        if inloop_keys and theseKeys and not has_pressed:
            has_pressed = True
            if not click_indicator_visible:
                polygon_trial_clicked.opacity = 1
                click_indicator_visible = True

        # check if participant has clicked and the
        # minimum trial duration has passed
        if has_pressed and t >= MIN_TRIAL_DURATION:
            continueRoutine = False

        if block_type != 'baseline':
            for img in [image_target, image_context_left, image_context_right]:
                img.draw()
      End Routine:
        trial_counter += 1

        if block_type == 'baseline':
            thisExp.addData('left_image_path', 'baseline')
        else:
            thisExp.addData('left_image_path', left_path)

        if key_resp_trial.keys in ['1', '3']:
            inner_trial_loop.addData('key_resp_trial.keys',key_resp_trial.keys)

        if block_type == 'baseline':
            inner_trial_loop.addData('key_resp_trial.corr', 'baseline')
        elif key_resp_trial.keys in ['', [], None] or key_resp_trial.keys == MR_TRIGGERKEY_TUPLE[0]:
            inner_trial_loop.addData('key_resp_trial.corr', 'no_response')
        elif key_resp_trial.corr == 1:
            inner_trial_loop.addData('key_resp_trial.corr', 'correct')
            inner_trial_loop.addData('key_resp_trial.rt', key_resp_trial.rt)
        else:
            inner_trial_loop.addData('key_resp_trial.corr', 'incorrect')
            inner_trial_loop.addData('key_resp_trial.rt', key_resp_trial.rt)
    PolygonComponent cross
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity [set every repeat] = $cross_opacity
      saveStartStop = False
      shape = cross
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_trial_clicked
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      pos = (0, -7.5)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
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  Routine block_instructions
    TextComponent block_instr_text
      letterHeight = 2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $block_instr_str
      units = deg
      wrapWidth = 20
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    CodeComponent block_instr_code
      Code Type = Py
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      Begin Experiment:
        import itertools

        # generate lists of lists, where each inner list holds
        # trial durations with an average duration of 1s
        numbers = [0.8, 0.9, 1, 1.1, 1.2]
        four_durs = [list(seq) for seq in itertools.combinations_with_replacement(numbers, 4) if sum(seq) == 4]
        eight_durs = [list(seq) for seq in itertools.combinations_with_replacement(numbers, 8) if sum(seq) == 8]

        # initialize counter that keeps track of which block is happening
        # now
        block_counter = 0
      Begin Routine:
        block_type = block_order[block_counter]

        # fetch the number of trials to be used in this block
        # (the number of trials in the inner loop)
        inloop_trial_no = block_dict[block_type]['inloop_trial_no']

        if inloop_trial_no == 1:
            loop_isi_durs = [1]
        elif inloop_trial_no == 4:
            loop_isi_durs = choice(four_durs)
        else:
            loop_isi_durs = choice(eight_durs)
        # shuffle the ISI durations so that the order
        # is random
        shuffle(loop_isi_durs)

        # initialize counter of number of trials done in current loop
        # iteration
        inloop_counter = 0

        # set the correct set of allowed responses for current loop iteration
        # (either none allowed, or 'left'/'right')
        inloop_keys = block_dict[block_type]['response_keys']
      End Routine:
        block_counter += 1

        # get instruction text to display for following block
        if (block_counter < N_BLOCKS):
            block_instr_str = block_dict[block_order[block_counter]]['instruction']
  Routine isi_800_1200ms
    PolygonComponent isi_cross
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      shape = cross
      size = (5, 5)
      startVal [time (s)] = 0.0
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    CodeComponent isi_code
      Code Type = Auto->JS
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      Begin Routine:
        # the point of the wrapping 'skip_isi_loop' is:
        # don't run ISI routine if
        # in a baseline block, to make
        # sure that the baseline block
        # only runs for 20s total

        # set inter stimulus interval duration
        isi_duration = loop_isi_durs[inloop_counter]
      Each Frame:
        if t >= isi_duration:
            continueRoutine = False
      End Routine:
        inloop_counter += 1
  Routine end_screen
    TextComponent text_end
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Nu är experimentet klart.
      units = deg
      wrapWidth = 27
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  Routine wait_for_mr_signal
    KeyboardComponent trigger_listener
      allowedKeys = MR_TRIGGERKEY_TUPLE
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_part_one
    TextComponent text_instructions_part_one
      letterHeight = MID_TXTSIZE
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 27
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      text:
        I detta test ska du hitta former gömda i rutor med linjer.

        Du ska hitta formen som visas på toppen av skärmen i samma storlek och orientering i en av de två rutorna. I vissa fall så har formen markerats med kraftigare linjer, du kommer att få veta när du ska leta efter dem.

        Lägg höger pekfinger på knappdosans vänstra knapp och långfingret på högra knappen och lämna dem där. När du upptäcker formen i vänstra rutan trycker du på vänstra knappen, om du ser den i högra rutan trycker du på högra knappen.

        Du har 20 sekunder på dig att hitta formen. Om du svarar innan två sekunder gått så stannar bilden kvar en kort stund och en liten kvadrat visas längst ner på skärmen innan nästa bild kommer upp. Svara så fort du kan utan att det blir fel, d.v.s. klicka så fort du ser formen, även om två sekunder inte har gått än.

        När ett kors visas på skärmen ska du titta på korset.

        Tryck vänster knapp för att se exempel på att hitta former.
    KeyboardComponent key_resp_instructions_part_one
      allowedKeys = LEFTKEY_TUPLE
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_setup
      Code Type = Auto->JS
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      Before Experiment:
        ###SET EXPERIMENT CONSTANTS###
        # trial image width/height size (in deg)
        IMAGE_SIZE = 7

        # vertical offset of trial images from central horizontal line
        # (in deg)
        VERTICAL_OFFSET = 3.75
        # horizontal offset of (context) trial images from central
        # vertical line (in deg)
        HORIZONTAL_OFFSET = 5

        # medium text size
        MID_TXTSIZE = 0.6

        # demonstration found/not found messages
        NOTFOUND_TXT = 'Formen fanns här. Tryck höger knapp.'
        FOUND_TXT = 'Precis, formen fanns här. Tryck höger knapp.'

        # keyboard keys (or response button signals, if they are
        # converted to keyboard presses) that are to be interpreted
        # as left/right responses
        LEFT_KEY = '3'
        RIGHT_KEY = '1'
        # it's not allowed to enter non-tuple/list variables in
        # keyboard response components' 'allowed keys' fields,
        # so also specify tuples to use
        RESPONSE_KEYS = (LEFT_KEY, RIGHT_KEY)
        LEFTKEY_TUPLE = (LEFT_KEY,)
        RIGHTKEY_TUPLE = (RIGHT_KEY,)

        # 'keyboard key' that MR trigger signal is
        # converted into ('5' is commonly used)
        MR_TRIGGERKEY_TUPLE = ('5',)

        ###END SET EXPERIMENT CONSTANTS###
  Routine demo_control
    ImageComponent image_demo_left_control
      image = stimuli_left/demonstration/demo_control_wtarget.png
      pos = (-HORIZONTAL_OFFSET, -VERTICAL_OFFSET)
      saveStartStop = False
      size = (IMAGE_SIZE, IMAGE_SIZE)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    KeyboardComponent key_resp_demo_control
      allowedKeys = RESPONSE_KEYS
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent image_demo_right_control
      image = stimuli_left/demonstration/demo_control_no_target.png
      pos = (HORIZONTAL_OFFSET, -VERTICAL_OFFSET)
      saveStartStop = False
      size = (IMAGE_SIZE, IMAGE_SIZE)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    CodeComponent code_demo_control
      Code Type = Auto->JS
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      Begin Routine:
        has_pressed_once = False

        # ensure that keys are reset
        theseKeys = []
      Each Frame:
        if RIGHT_KEY in theseKeys and has_pressed_once:
            continueRoutine = False

        if theseKeys and not has_pressed_once:
            has_pressed_once = True
            image_demo_left_control.image = 'stimuli_left/demonstration/demo_control_wtarget_highlighted.jpg'
            if RIGHT_KEY in theseKeys:
                text_demo_control_left.text = NOTFOUND_TXT
            else:
                text_demo_control_left.text = FOUND_TXT
            text_demo_control_right.setAutoDraw(False)
            theseKeys = []
    ImageComponent image_demo_target_control
      image = stimuli_left/demonstration/demo_control_target.png
      pos = (0, VERTICAL_OFFSET)
      saveStartStop = False
      size = (IMAGE_SIZE, IMAGE_SIZE)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    TextComponent text_demo_control_left
      letterHeight = MID_TXTSIZE
      pos = (-IMAGE_SIZE * 6/5, VERTICAL_OFFSET * 4/5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Tryck vänster knapp om du ser formen på denna sida.
      units = deg
      wrapWidth = IMAGE_SIZE
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    TextComponent text_demo_control_right
      letterHeight = MID_TXTSIZE
      pos = (IMAGE_SIZE * 6/5, VERTICAL_OFFSET * 4/5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Tryck höger knapp om du ser formen på denna sida.
      units = deg
      wrapWidth = IMAGE_SIZE
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  Routine demo_test
    ImageComponent image_demo_test_left
      image = stimuli_left/demonstration/demo_test_no_target.png
      pos = (-HORIZONTAL_OFFSET, -VERTICAL_OFFSET)
      saveStartStop = False
      size = (IMAGE_SIZE, IMAGE_SIZE)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    KeyboardComponent key_resp_demo
      allowedKeys = RESPONSE_KEYS
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent image_demo_test_right
      image = stimuli_left/demonstration/demo_test_wtarget.png
      pos = (HORIZONTAL_OFFSET, -VERTICAL_OFFSET)
      saveStartStop = False
      size = (IMAGE_SIZE, IMAGE_SIZE)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    ImageComponent image_demo_test_target
      image = stimuli_left/demonstration/demo_test_target.png
      pos = (0, VERTICAL_OFFSET)
      saveStartStop = False
      size = (IMAGE_SIZE, IMAGE_SIZE)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    CodeComponent code_test_demo
      Code Type = Auto->JS
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      Begin Routine:
        has_pressed_once = False

        # ensure that keys are reset
        theseKeys = []
      Each Frame:
        if RIGHT_KEY in theseKeys and has_pressed_once:
            continueRoutine = False

        if theseKeys and not has_pressed_once:
            has_pressed_once = True
            if LEFT_KEY in theseKeys:
                text_demo_test_right.text = NOTFOUND_TXT
            else:
                text_demo_test_right.text = FOUND_TXT
            text_demo_test_left.setAutoDraw(False)
            image_demo_test_right.image = 'stimuli_left/demonstration/demo_test_wtarget_highlighted.png'
            theseKeys = []
    TextComponent text_demo_test_left
      letterHeight = MID_TXTSIZE
      pos = (-IMAGE_SIZE * 6/5, VERTICAL_OFFSET * 4/5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Tryck vänster knapp om du ser formen på denna sida.
      units = deg
      wrapWidth = IMAGE_SIZE
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    TextComponent text_demo_test_right
      letterHeight = MID_TXTSIZE
      pos = (IMAGE_SIZE * 6/5, VERTICAL_OFFSET * 4/5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Tryck höger knapp om du ser formen på denna sida.
      units = deg
      wrapWidth = IMAGE_SIZE
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  Routine instructions_part_two
    TextComponent text_instructions_part_two
      letterHeight = 0.7
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 27
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      text:
        En del uppgifter i testet är mycket svåra medan andra är enklare.

        Experimentet tar vanligtvis mellan 10 och 15 minuter. Du kommer att se ett meddelande när testet är klart.

        När du är redo att börja, tryck på vänster knapp.
    KeyboardComponent key_resp_instructions_part_two
      allowedKeys = LEFTKEY_TUPLE
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine instructions_part_one
  Routine demo_test
  Routine demo_control
  Routine instructions_part_two
  Routine wait_for_mr_signal
  LoopInitiator outer_block_loop loopType="TrialHandler"
    loopType = random
    nReps = $N_BLOCKS
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    Routine block_instructions
    LoopInitiator inner_trial_loop loopType="TrialHandler"
      loopType = random
      nReps = $inloop_trial_no
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      Routine trial
      LoopInitiator skip_isi_loop loopType="TrialHandler"
        loopType = random
        nReps = block_type != 'baseline'
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        Routine isi_800_1200ms
      LoopTerminator skip_isi_loop
    LoopTerminator inner_trial_loop
  LoopTerminator outer_block_loop
  Routine end_screen
